PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'run': '1', 'config': 'fnirs'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = hearing
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    CodeComponent code_init
      Code Type = Py
      Before Experiment:
        import os
        import random
        from pylsl import StreamInfo, StreamOutlet
        import socket
        from psychopy import sound
        import yaml

        marker_info = StreamInfo('HearingMarkerStream', 'Markers',
                                 1, 0, 'string', 'hearingid2023')
        config_file = open('config.yaml')
        yaml_config = yaml.safe_load(config_file)
        marker_outlet = StreamOutlet(marker_info)
        started_recording = False
        lsl_socket = socket.create_connection(("localhost", 22345))
      Begin Experiment:
        config_type = expInfo['config']
        exp_config = yaml_config[config_type]

        sound_files = exp_config['sound_files']
        baseline_duration = exp_config['baseline_duration']
        stimuli_repeat = exp_config['stimuli_repeat']
        stimulus_dration = exp_config['stimulus_dration']
        response_duration = exp_config['response_duration']
        rest_range = exp_config['rest_range']


        #sound_dict = {}
        #for sf in sound_files:
        #    sound_path = os.path.join('sounds', f"{sf}.wav")
        #    sound_stimuli = sound.Sound(sound_path, secs=-1, stereo=-1, hamming=True,
        #    volume=-1, name=sf)
        #    sound_dict[sf] = sound_stimuli

        sound_files = sound_files * stimuli_repeat
        n_trials = len(sound_files)
        random.shuffle(sound_files)
        sound_idx = 0


        participant_id = expInfo['participant']
        run = expInfo['run']
        task = yaml_config['task']

        if lsl_socket is not None:
            started_recording = True
            config_str = f'filename {{template:sub-%p/sub-%p_task-%b_run-%n.xdf}} {{run:{run}}} {{participant:{participant_id}}} {{task:{task}}}\n'
            print(config_str)

            lsl_socket.sendall(b"update\n")
            lsl_socket.sendall(b"select all\n")
            lsl_socket.sendall(config_str.encode('utf-8'))
            lsl_socket.sendall(b"start\n")
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
      End Experiment:
        if started_recording:
            lsl_socket.sendall(b"stop\n")
            started_recording = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will listen to several different sounds. Once the audio finishes playing, you must sit still and focus on it.

        Press the space key to start the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["rest"])
        rest_duration = random.randint(rest_range[0],rest_range[1])
        if sound_idx < len(sound_files)-1:
            sound_idx+=1
        else:
            sound_idx = 0
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    PolygonComponent cross_4
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
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  Routine pre_stim
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        name = sound_files[sound_idx]
        marker_outlet.push_sample([f"pre-stim-{name}"])
        sound_path = os.path.join('sounds', f"{name}.wav")
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_stim
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  Routine stim
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    CodeComponent pupil_code
      Code Type = Py
      Begin Routine:
        name = sound_files[sound_idx]
        sound_path = os.path.join('sounds', f"{name}.wav")
        current_sound.setSound(sound_path, hamming=True)
        marker_outlet.push_sample([f"stim-{name}"])
        sound_duration = current_sound.getDuration()
        print(f'{name}: {sound_duration}')
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
      End Routine:
        marker_outlet.push_sample([f"poststim-{name}"])
    SoundComponent current_sound
      sound [set every repeat] = $sound_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulus_dration
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $sound_duration
      text [set every repeat] = $name
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  Routine post_stim
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    CodeComponent code_increment
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample([f"response-{name}"])
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $response_duration
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  Routine baseline
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    CodeComponent code_baseline
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"baseline"])
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys and started_recording:
            s.sendall(b"stop\n")
            started_recording = False
    PolygonComponent cross_3
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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  Routine end
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["end"])
        if started_recording:
            lsl_socket.sendall(b"stop\n")
            started_recording = False
Flow
  Routine welcome
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_trials
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    Routine stim
    Routine post_stim
    Routine rest
  LoopTerminator trials
  Routine end
